CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20160418141927
GitHash:9969f42
ModuleCount:26
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Drag a folder of channel images here.']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['This module gets the sample name from the DAPI file name. It captures everything after the 5th character and before “.tif”. This name is used for output files and in the spreadsheet.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression:.{5}(?P<Sample>(.*)(?=\\\\.tif))
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does startwith "DAPI")
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
NamesAndTypes:[module_num:3|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notes:['The NamesAndTypes module allows you to assign a meaningful name to each image by which other modules will refer to it. Here the DAPI (blue), GPF (green), and Y-2E-C (red) images are identified.']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Select the rule criteria:and (file does startwith "DAPI")
    Name to assign these images:OrigBlue
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "GPF")
    Name to assign these images:OrigGreen
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does startwith "Y-2E-C")
    Name to assign these images:OrigRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['The Groups module optionally allows you to split your list of images into image subsets (groups) which will be processed independently of each other. Examples of groupings include screening batches, microtiter plates, time-lapse movies, etc. There are no groups defined in this pipeline.']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies red cells.']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
    Select the input image:OrigRed
    Name the primary objects to be identified:RedCells
    Typical diameter of objects, in pixel units (Min,Max):12,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:RedOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MoG
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.1
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identifies green cells.']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
    Select the input image:OrigGreen
    Name the primary objects to be identified:GreenCells
    Typical diameter of objects, in pixel units (Min,Max):12,60
    Discard objects outside the diameter range?:Yes
    Try to merge too small objects with nearby larger objects?:No
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Name the outline image:GreenOutlines
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Retain outlines of the identified objects?:Yes
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    Handling of objects if excessive number of objects identified:Continue
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    Threshold setting version:1
    Threshold strategy:Global
    Thresholding method:MoG
    Select the smoothing method for thresholding:Automatic
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    Threshold correction factor:1.2
    Lower and upper bounds on threshold:0,1
    Approximate fraction of image covered by objects?:0.1
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
MaskObjects:[module_num:7|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notes:['Finds colocalized cells, defined as green cells that are at least 50% overlapped by one or more red cells. ', 'The objects are renumbered, so that the results table will contain the counts of (all) red, (all) green, and colocalized cells.']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
    Select objects to be masked:GreenCells
    Name the masked objects:ColocalizedCells
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:RedCells
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    Handling of objects that are partially masked:Remove depending on overlap
    Fraction of object that must overlap:0.50
    Numbering of resulting objects:Renumber
    Retain outlines of the resulting objects?:Yes
    Name the outline image:G_masked_by_R
    Invert the mask?:No

MeasureImageAreaOccupied:[module_num:8|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notes:['As an additional measure (besides cell count), this module finds the area occupied by green cells, red cells, and the colocalized region. Area is not affected by errors in finding cell boundaries.']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
    Hidden:3
    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:GreenCells
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:RedCells
    Retain a binary image of the object regions?:No
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    Measure the area occupied in a binary image, or in objects?:Objects
    Select objects to measure:ColocalizedCells
    Retain a binary image of the object regions?:No
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
CalculateMath:[module_num:9|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notes:['Calculates fraction of green cell *area* that is also red.']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
    Name the output measurement:GreenFracColocArea
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_ColocalizedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_GreenCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:10|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notes:['Calculates the fraction of red cell *area* that is also green.']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
    Name the output measurement:RedFracColocArea
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:AreaOccupied_AreaOccupied_ColocalizedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:AreaOccupied_AreaOccupied_RedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:11|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notes:['Calculates the fraction of red *cells* that are also green.']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
    Name the output measurement:RedFracColocCells
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_ColocalizedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_RedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:12|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notes:['Calculates the fraction of green *cells* that are also red.']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
    Name the output measurement:GreenFracColocCells
    Operation:Divide
    Select the numerator measurement type:Image
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    Select the numerator measurement:Count_ColocalizedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the denominator measurement type:Image
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    Select the denominator measurement:Count_GreenCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:13|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notes:['Calculates the number of cells that are green but NOT red. (Green cells - Colocalized Cells)']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
    Name the output measurement:CountGreenOnlyCells
    Operation:Subtract
    Select the minuend measurement type:Image
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    Select the minuend measurement:Count_GreenCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Count_ColocalizedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
CalculateMath:[module_num:14|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notes:['Calculates the number of cells that are red but NOT green. (Red cells - Colocalized Cells)']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
    Name the output measurement:CountRedOnlyCells
    Operation:Subtract
    Select the minuend measurement type:Image
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    Select the minuend measurement:Count_RedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Select the subtrahend measurement type:Image
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    Select the subtrahend measurement:Count_ColocalizedCells
    Multiply the above operand by:1.0
    Raise the power of above operand by:1.0
    Take log10 of result?:No
    Multiply the result by:1.0
    Raise the power of result by:1.0
    Add to the result:0.0
    Constrain the result to a lower bound?:No
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    Constrain the result to an upper bound?:No
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
RescaleIntensity:[module_num:15|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notes:['Adjusts contrast of the red image for output.']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
    Select the input image:OrigRed
    Name the output image:RescaledR
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:16|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notes:['']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
    Select the input image:OrigGreen
    Name the output image:RescaledG
    Rescaling method:Stretch each image to use the full intensity range
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
RescaleIntensity:[module_num:17|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notes:['Adjusts contrast of the blue image for output.']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
    Select the input image:OrigBlue
    Name the output image:RescaledB
    Rescaling method:Stretch each image to use the full intensity range
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
GrayToColor:[module_num:18|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notes:['Merges the contrast-adjusted channels for output.']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
    Select a color scheme:RGB
    Select the image to be colored red:RescaledR
    Select the image to be colored green:RescaledG
    Select the image to be colored blue:RescaledB
    Name the output image:RescaledRGB
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
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
OverlayOutlines:[module_num:19|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notes:['']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledRGB
    Name the output image:RedCellsOnRGB
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:red
    Load outlines from an image or objects?:Objects
    Select objects to display:RedCells

OverlayOutlines:[module_num:20|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notes:['Outlines the identified green cells in green on the merged image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledRGB
    Name the output image:GreenCellsOnRGB
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:green
    Load outlines from an image or objects?:Objects
    Select objects to display:GreenCells

OverlayOutlines:[module_num:21|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notes:['Outlines the identified cells in red and green respectively on the nuclei image. (Note that this image is not saved in the current version)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:OrigBlue
    Name the output image:CellsOnNuclei
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:Red
    Load outlines from an image or objects?:Objects
    Select objects to display:RedCells
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    Select outline color:Green
    Load outlines from an image or objects?:Objects
    Select objects to display:GreenCells

OverlayOutlines:[module_num:22|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notes:['Outlines the identified colocalized cells in white on the merged image.']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaledRGB
    Name the output image:ColocMaskOnRGB
    Outline display mode:Color
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    Width of outlines:1
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    Select outline color:white
    Load outlines from an image or objects?:Objects
    Select objects to display:ColocalizedCells

SaveImages:[module_num:23|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notes:['Saves the outlined red cells using the original sample name as prefix.']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
    Select the type of image to save:Image
    Select the image to save:RedCellsOnRGB
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Sample>_RedCells
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    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:24|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notes:['Saves the outlined green cells']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
    Select the type of image to save:Image
    Select the image to save:GreenCellsOnRGB
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Sample>_GreenCells
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    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:25|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notes:['Saves the detected colocalized cells']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
    Select the type of image to save:Image
    Select the image to save:ColocMaskOnRGB
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    Select method for constructing file names:Single name
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    Enter single file name:\\\\g<Sample>_ColocCells
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    Saved file format:png
    Output file location:Default Output Folder|None
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Rescale the images? :No
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    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:26|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notes:['Export any measurements to a comma-delimited file (.csv). The per-image data is saved. Data from all files in the set is saved in 1 file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Limit output to a size that is allowed in Excel?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|.
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    :Image|Count_ColocalizedCells,Image|Count_RedCells,Image|Count_GreenCells,Image|AreaOccupied_Perimeter_RedCells,Image|AreaOccupied_Perimeter_ColocalizedCells,Image|AreaOccupied_Perimeter_GreenCells,Image|AreaOccupied_AreaOccupied_RedCells,Image|AreaOccupied_AreaOccupied_ColocalizedCells,Image|AreaOccupied_AreaOccupied_GreenCells,Image|AreaOccupied_TotalArea_RedCells,Image|AreaOccupied_TotalArea_ColocalizedCells,Image|AreaOccupied_TotalArea_GreenCells,Image|Math_CountGreenOnlyCells,Image|Math_GreenFracColocArea,Image|Math_CountRedOnlyCells,Image|Math_RedFracColocArea,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:ColocalizationResults
    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
